// "BatchConvertLSMsToPICs"
//
// This macro batch processes all the lsm files in a folder
// saving them as pic files.
// Limitations/Specifics
// 1) Only works with Fiji
// 2) Swaps channel 1 and 2
// 3) Always flips vertically 
// 4) Expects names to be in regular JLab format
//    or in something where all it has to do is append the
//    v01.pic v02.pic etc to the filestem

// (Slightly) Adapted by Greg Jefferis from code at
// http://rsb.info.nih.gov/ij/macros/BatchProcessFolders.txt

// jefferis@gmail.com

requires("1.33s"); 
dir = getDirectory("Choose a stacks directory");
outputDir = getDirectory("Choose output directory");
setBatchMode(true);
count = 0;
countFiles(dir);
print("Total files: "+count);
n = 0;
processFiles(dir, outputDir);

function countFiles(dir) {
		list = getFileList(dir);
	for (i=0; i<list.length; i++) {
		if (endsWith(list[i], "/"))
            countFiles(""+dir+list[i]);
	else
		count++;
	}
}

function processFiles(dir,outputDir) {
	list = getFileList(dir);
    for (i=0; i<list.length; i++) {
        if (endsWith(list[i], "/"))
            processFiles(""+dir+list[i], outputDir);
        else {
		showProgress(n++, count);
              processFile(dir,outputDir,list[i]);
        }
    }
}

function processFile(dir,outputDir,file) {
	if (endsWith(file, ".pic") || endsWith(file, ".gz")) {
		path = dir+file;
//Change from opening files using the LOCI importer to using the Biorad reader
// For some reason the LOCI tool looses the information about units and image size changing from whatever to pixels
		run("Biorad...", "open=" + path);
//		run("Bio-Formats Importer", "open=" + path + " view=[Standard ImageJ] stack_order=Default split_channels");
		title=getTitle();
		processImage();
		run("Biorad ...","biorad=["+outputDir+substring(file,0,lastIndexOf(file,"."))+".pic]");
		close();
		} 
	}


function processImage() {
	// run("Rotate... ", "angle=180 grid=1 interpolation=None stack");
	run("Rotate 90 Degrees Right");
//	run("Z Project...", "projection=[Standard Deviation]");
//	run("8-bit");
//  run("Flip Vertically");
}
